---
API: 2.1
OpenSesame: 3.3.12
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set pygame_doublebuf no
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set expyriment_opengl no
set experiment_path "/Users/jakobthygesen/Desktop/Cognitive Science/3rd semester/Perception and action/PercActExam"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sketchpad Welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="Velkommen til dette eksperiment!<br /><br />Inden vi går i gang vil vi gerne stille dig nogle enkelte spørgsmål.<br /><br />Tryk på en valgfri tast for at fortsætte!" x=0 y=0 z_index=0

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run practice_setup "[practice]==yes"
	run experimental_setup "[practice]==no"

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="Eksperimentet er slut.<br /><br />Tak for din deltagelse!" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="Det var øve-runden. Prøv gerne om du kan svare lidt hurtigere. <br /><br />Tryk på en valgfri tast for at fortsætte til det rigtige eksperiment" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run Welcome always
	run new_form_text_input always
	run new_form_multiple_choice_1 always
	run new_form_multiple_choice always
	run new_form_multiple_choice_3 always
	run new_form_multiple_choice_4_1 always
	run new_form_multiple_choice_4 always
	run new_form_text_display always
	run new_form_consent always
	run instructions always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define loop experimental_setup
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 left_figure "lynlås_ly.jpg"
	setcycle 0 right_figure "lyntog_ly.jpg"
	setcycle 0 sound "lyntog_ly.wav"
	setcycle 0 word Lyntog
	setcycle 0 correct_button right_button
	setcycle 0 Condition congruent
	setcycle 1 left_figure "bygning_by.jpg"
	setcycle 1 right_figure "bygmark_by.jpg"
	setcycle 1 sound "bygmark_by.wav"
	setcycle 1 word Bygmark
	setcycle 1 correct_button right_button
	setcycle 1 Condition congruent
	setcycle 2 left_figure "plantegning_pla.jpg"
	setcycle 2 right_figure "plante_pla.jpg"
	setcycle 2 sound "plante_pla.wav"
	setcycle 2 word Plante
	setcycle 2 correct_button right_button
	setcycle 2 Condition congruent
	setcycle 3 left_figure "skydeskive_sky.jpg"
	setcycle 3 right_figure "sky_sky.jpg"
	setcycle 3 sound "sky_sky.wav"
	setcycle 3 word Sky
	setcycle 3 correct_button right_button
	setcycle 3 Condition congruent
	setcycle 4 left_figure "kajak_ka.jpg"
	setcycle 4 right_figure "kage_ka.jpg"
	setcycle 4 sound "kage_ka.wav"
	setcycle 4 word Kage
	setcycle 4 correct_button right_button
	setcycle 4 Condition congruent
	setcycle 5 left_figure "vindruer_vin.jpg"
	setcycle 5 right_figure "vindue_vin.jpg"
	setcycle 5 sound "vindue_vi.wav"
	setcycle 5 word Vindue
	setcycle 5 correct_button right_button
	setcycle 5 Condition congruent
	setcycle 6 left_figure "kaffe_ka2.jpg"
	setcycle 6 right_figure "kartoffel_ka2.jpg"
	setcycle 6 sound "kartoffel_ka2.wav"
	setcycle 6 word Kartoffel
	setcycle 6 correct_button right_button
	setcycle 6 Condition congruent
	setcycle 7 left_figure "fjer_fje.jpg"
	setcycle 7 right_figure "fjeder_fje.jpg"
	setcycle 7 sound "fjeder_fje.wav"
	setcycle 7 word Fjeder
	setcycle 7 correct_button right_button
	setcycle 7 Condition congruent
	setcycle 8 left_figure "lynlås_ly.jpg"
	setcycle 8 right_figure "lyntog_ly.jpg"
	setcycle 8 sound "lynlås_ly.wav"
	setcycle 8 word "Lynlås"
	setcycle 8 correct_button left_button
	setcycle 8 Condition congruent
	setcycle 9 left_figure "bygning_by.jpg"
	setcycle 9 right_figure "bygmark_by.jpg"
	setcycle 9 sound "bygning_by.wav"
	setcycle 9 word Bygning
	setcycle 9 correct_button left_button
	setcycle 9 Condition congruent
	setcycle 10 left_figure "plantegning_pla.jpg"
	setcycle 10 right_figure "plante_pla.jpg"
	setcycle 10 sound "plantegning_pla.wav"
	setcycle 10 word Plantegning
	setcycle 10 correct_button left_button
	setcycle 10 Condition congruent
	setcycle 11 left_figure "skydeskive_sky.jpg"
	setcycle 11 right_figure "sky_sky.jpg"
	setcycle 11 sound "skydeskive_sky.wav"
	setcycle 11 word Skydeskive
	setcycle 11 correct_button left_button
	setcycle 11 Condition congruent
	setcycle 12 left_figure "kajak_ka.jpg"
	setcycle 12 right_figure "kage_ka.jpg"
	setcycle 12 sound "kajak_ka.wav"
	setcycle 12 word Kajak
	setcycle 12 correct_button left_button
	setcycle 12 Condition congruent
	setcycle 13 left_figure "vindruer_vin.jpg"
	setcycle 13 right_figure "vindue_vin.jpg"
	setcycle 13 sound "vindrue_vi.wav"
	setcycle 13 word Vindrue
	setcycle 13 correct_button left_button
	setcycle 13 Condition congruent
	setcycle 14 left_figure "kaffe_ka2.jpg"
	setcycle 14 right_figure "kartoffel_ka2.jpg"
	setcycle 14 sound "kaffe_ka2.wav"
	setcycle 14 word Kartoffel
	setcycle 14 correct_button left_button
	setcycle 14 Condition congruent
	setcycle 15 left_figure "fjer_fje.jpg"
	setcycle 15 right_figure "fjeder_fje.jpg"
	setcycle 15 sound "fjer_fje.wav"
	setcycle 15 word Fjer
	setcycle 15 correct_button left_button
	setcycle 15 Condition congruent
	setcycle 16 left_figure "lyntog_ly.jpg"
	setcycle 16 right_figure "lynlås_ly.jpg"
	setcycle 16 sound "lyntog_ly.wav"
	setcycle 16 word "Lynlås"
	setcycle 16 correct_button left_button
	setcycle 16 Condition incongruent
	setcycle 17 left_figure "bygmark_by.jpg"
	setcycle 17 right_figure "bygning_by.jpg"
	setcycle 17 sound "bygmark_by.wav"
	setcycle 17 word Bygning
	setcycle 17 correct_button left_button
	setcycle 17 Condition incongruent
	setcycle 18 left_figure "plante_pla.jpg"
	setcycle 18 right_figure "plantegning_pla.jpg"
	setcycle 18 sound "plante_pla.wav"
	setcycle 18 word Plantegning
	setcycle 18 correct_button left_button
	setcycle 18 Condition incongruent
	setcycle 19 left_figure "sky_sky.jpg"
	setcycle 19 right_figure "skydeskive_sky.jpg"
	setcycle 19 sound "sky_sky.wav"
	setcycle 19 word Skydeskive
	setcycle 19 correct_button left_button
	setcycle 19 Condition incongruent
	setcycle 20 left_figure "kage_ka.jpg"
	setcycle 20 right_figure "kajak_ka.jpg"
	setcycle 20 sound "kage_ka.wav"
	setcycle 20 word Kajak
	setcycle 20 correct_button left_button
	setcycle 20 Condition incongruent
	setcycle 21 left_figure "vindue_vin.jpg"
	setcycle 21 right_figure "vindruer_vin.jpg"
	setcycle 21 sound "vindue_vi.wav"
	setcycle 21 word Vindruer
	setcycle 21 correct_button left_button
	setcycle 21 Condition incongruent
	setcycle 22 left_figure "kartoffel_ka2.jpg"
	setcycle 22 right_figure "kaffe_ka2.jpg"
	setcycle 22 sound "kartoffel_ka2.wav"
	setcycle 22 word Kartoffel
	setcycle 22 correct_button left_button
	setcycle 22 Condition incongruent
	setcycle 23 left_figure "fjeder_fje.jpg"
	setcycle 23 right_figure "fjer_fje.jpg"
	setcycle 23 sound "fjeder_fje.wav"
	setcycle 23 word Fjer
	setcycle 23 correct_button left_button
	setcycle 23 Condition incongruent
	setcycle 24 left_figure "lyntog_ly.jpg"
	setcycle 24 right_figure "lynlås_ly.jpg"
	setcycle 24 sound "lynlås_ly.wav"
	setcycle 24 word Lyntog
	setcycle 24 correct_button right_button
	setcycle 24 Condition incongruent
	setcycle 25 left_figure "bygmark_by.jpg"
	setcycle 25 right_figure "bygning_by.jpg"
	setcycle 25 sound "bygning_by.wav"
	setcycle 25 word Bygmark
	setcycle 25 correct_button right_button
	setcycle 25 Condition incongruent
	setcycle 26 left_figure "plante_pla.jpg"
	setcycle 26 right_figure "plantegning_pla.jpg"
	setcycle 26 sound "plantegning_pla.wav"
	setcycle 26 word Plante
	setcycle 26 correct_button right_button
	setcycle 26 Condition incongruent
	setcycle 27 left_figure "sky_sky.jpg"
	setcycle 27 right_figure "skydeskive_sky.jpg"
	setcycle 27 sound "skydeskive_sky.wav"
	setcycle 27 word Sky
	setcycle 27 correct_button right_button
	setcycle 27 Condition incongruent
	setcycle 28 left_figure "kage_ka.jpg"
	setcycle 28 right_figure "kajak_ka.jpg"
	setcycle 28 sound "kajak_ka.wav"
	setcycle 28 word Kage
	setcycle 28 correct_button right_button
	setcycle 28 Condition incongruent
	setcycle 29 left_figure "vindue_vin.jpg"
	setcycle 29 right_figure "vindruer_vin.jpg"
	setcycle 29 sound "vindrue_vi.wav"
	setcycle 29 word Vinduer
	setcycle 29 correct_button right_button
	setcycle 29 Condition incongruent
	setcycle 30 left_figure "kartoffel_ka2.jpg"
	setcycle 30 right_figure "kaffe_ka2.jpg"
	setcycle 30 sound "kaffe_ka2.wav"
	setcycle 30 word Kartoffel
	setcycle 30 correct_button right_button
	setcycle 30 Condition incongruent
	setcycle 31 left_figure "fjeder_fje.jpg"
	setcycle 31 right_figure "fjer_fje.jpg"
	setcycle 31 sound "fjer_fje.wav"
	setcycle 31 word Fjeder
	setcycle 31 correct_button right_button
	setcycle 31 Condition incongruent
	run new_sequence

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="Velkommen til dette eksperiment!<br /><br />I dette eksperiment vil du blive præsenteret for forskellige ord - et ord vil blive læst op for dig og et ord vil stå skrevet på skærmen. Derudover vil du blive præsenteret for to billeder. Din opgave er hurtigst muligt at klikke på det billede der bedst repræsenterer det ord du HØRER. Det er vigtigt at du svarer så hurtigt som muligt<br /><br /><br />Når du har valgt et billede går eksperimentet automatisk videre til næste sæt af ord.<br /><br />Vi starter nu med en øve-runde før det faktiske eksperiment starter.<br /><br />Tryk på en valgfri tast for at begynde!" x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define form_base new_form_base
	set timeout infinite
	set spacing 10
	set rows "2;2"
	set only_render no
	set margins "50;50;50;50"
	set description "A generic form plug-in"
	set cols "2;2"
	set _theme gray


define form_consent new_form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Samtykkeerklæring"
	__form_text__
	Forskningsprojektet ledes af Jakob Thygesen (202108300@post.au.dk) og Astrid Iversen (202108377@post.au.dk). De kan blive kontaktet på et hvilket givent tidspunkt med spørgsmål og henvendelser. 
	
	Data behandles i henhold til Aarhus Universitets privatlivspolitik. Al data vil blive slettet efter projektet er færdiggjort.
	
	Du kan på et hvilket som helst tidspunkt under eksperimentet trække din samtykke tilbage uden dette har nogen konsekvenser. Efter eksperimentet er fuldført vil din data være anonymiseret, og det vil derfor ikke længere være muligt at trække din samtykke tilbage.
	__end__
	set description "A simple consent form"
	set decline_text Uenig
	set decline_message "Samtykkeerklæringen er et krav for at deltage.  Gør venligst forskerne opmærksom på at du ikke ønsker at deltage."
	set cols "2;2"
	set checkbox_text "Jeg har læst ovenstående information og har modtaget svar på alle spørgsmål jeg måtte have."
	set accept_text Enig
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Region Hovedstaden
	Region Sjælland
	Region Syddanmark
	Region Midt
	Region Nordjylland
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "I hvilken  dansk region har du boet længst tid?"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice new_form_multiple_choice_1
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Mand
	Kvinde
	Andet
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Hvilket køn er du?"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice new_form_multiple_choice_2
	set timeout infinite
	set spacing 10
	set question "Your question"
	__options__
	Yes
	No
	Maybe
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_multiple_choice new_form_multiple_choice_3
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Ja
	Nej
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Er du nogensinde blevet diagnosticeret med ordblindhed?"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice new_form_multiple_choice_4
	set timeout infinite
	set spacing 10
	set question "(Hvis ikke dine forældre har samme uddannelsesniveau, noter da det højeste)"
	__options__
	Folkeskole
	Gymnasial ungdomsuddannelse
	Erhvervsuddannelse
	Kort videregående uddannelse
	Mellemlang videregående uddannelse
	Lang videregående uddannelse
	Andet
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Hvad er dine forældres højest gennemførte uddannelse"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice new_form_multiple_choice_4_1
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Folkeskole
	Gymnasial ungdomsuddannelse
	Erhvervsuddannelse
	Kort videregående uddannelse
	Mellemlang videregående uddannelse
	Lang videregående uddannelse
	Andet
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Hvad er din højest gennemførte uddannelse"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Næste side"
	set margins "50;50;50;50"
	set form_title "Samtykkeerklæring"
	__form_text__
	Deltagelse i dette studie er fuldstændig frivilligt.
	
	I dette eksperiment vil du blive præsenteret med to billeder, et skrevet ord og lyden af en person der udtaler et ord. Forsøget samler data om hvordan din mus bevæger sig over skærmen. Vi indsamler også data om demografi (køn, alder…).
	
	Der er ingen kendte risici associeret ved studiet. Studiets formål er at studere læsning og beslutningstagning.
	
	Jeg bekræfter at jeg: 
	- Har dansk som modersmål
	- Har normalt eller korrigeret til normalt syn
	- Har normal eller korrigeret til normal hørelse 
	
	Du vil blive kompenseret for din deltagelse med en cookie
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_input new_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Hvor gammel er du?"
	set form_question ""
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define mousetrap_response new_mousetrap_response
	__warning_message__
	draw textline text="Please start moving" x=0 y=0
	__end__
	set update_feedback yes
	set timeout infinite
	set start_coordinates "0;288"
	set skip_item no
	set sketchpad trial_stimuli
	set save_trajectories yes
	set reset_mouse yes
	set number_of_buttons 2
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button "[correct_button]"
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 right_button
	set button1 left_button
	set boundaries "upper=no lower=no left=no right=no"

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "[sound]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_stimuli always
	run new_synth_1 always
	run trial_stimuli_1 always
	run trial_stimuli_3 always
	run new_synth_2 always
	run trial_stimuli_1 always
	run trial_stimuli_2 always
	run new_sampler always
	run new_mousetrap_response always
	run logger always

define synth new_synth
	set volume 0.6
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth new_synth_1
	set volume 0.6
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth new_synth_2
	set volume 0.6
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence

define loop practice_setup
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 4
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 left_figure "computer_ko.jpg"
	setcycle 0 right_figure "kommode_ko.jpg"
	setcycle 0 sound "computer_ko.wav"
	setcycle 0 word Hue
	setcycle 0 correct_button left_button
	setcycle 0 Condition incongruent
	setcycle 1 left_figure "klatkage_kla.jpg"
	setcycle 1 right_figure "klatresko_kla.jpg"
	setcycle 1 sound "klatresko_kla.wav"
	setcycle 1 word Kop
	setcycle 1 correct_button right_button
	setcycle 1 Condition incongruent
	setcycle 2 left_figure "lyssestage_lys.jpg"
	setcycle 2 right_figure "lyssværd_lys.png"
	setcycle 2 sound "lyssværd_ly.wav"
	setcycle 2 word Cykel
	setcycle 2 correct_button right_button
	setcycle 2 Condition incongruent
	setcycle 3 left_figure "rokke_rå.jpg"
	setcycle 3 right_figure "råkost_rå.JPG"
	setcycle 3 sound "rokke_ro.wav"
	setcycle 3 word Dans
	setcycle 3 correct_button left_button
	setcycle 3 Condition incongruent
	run trial_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run trial_stimuli always
	run trial_stimuli_1 always
	run new_synth always
	run trial_stimuli_3 always
	run trial_stimuli_1 always
	run new_synth always
	run trial_stimuli_2 always
	run new_sampler always
	run new_mousetrap_response always
	run logger always

define sketchpad trial_stimuli
	set duration 1000
	set description "Displays stimuli"
	draw rect color=white fill=0 h=192 name=left_button penwidth=1 show_if=always w=192 x=-512.0 y=-320.0 z_index=0
	draw rect color=white fill=0 h=192 name=right_button penwidth=1 show_if=always w=192 x=320.0 y=-320.0 z_index=0
	draw image center=1 file="[left_figure]" scale=1 show_if=always x=-416.0 y=-224.0 z_index=0
	draw image center=1 file="[right_figure]" scale=1 show_if=always x=416.0 y=-224.0 z_index=0

define sketchpad trial_stimuli_1
	set duration 200
	set description "Displays stimuli"
	draw rect color=white fill=0 h=192 name=left_button penwidth=1 show_if=always w=192 x=-512.0 y=-320.0 z_index=0
	draw rect color=white fill=0 h=192 name=right_button penwidth=1 show_if=always w=192 x=320.0 y=-320.0 z_index=0
	draw image center=1 file="[left_figure]" scale=1 show_if=always x=-416.0 y=-224.0 z_index=0
	draw image center=1 file="[right_figure]" scale=1 show_if=always x=416.0 y=-224.0 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=224 z_index=0

define sketchpad trial_stimuli_2
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=192 name=left_button penwidth=1 show_if=always w=192 x=-512.0 y=-320.0 z_index=0
	draw rect color=white fill=0 h=192 name=right_button penwidth=1 show_if=always w=192 x=320.0 y=-320.0 z_index=0
	draw image center=1 file="[left_figure]" scale=1 show_if=always x=-416.0 y=-224.0 z_index=0
	draw image center=1 file="[right_figure]" scale=1 show_if=always x=416.0 y=-224.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=35 html=yes show_if=always text="[word]" x=0 y=224 z_index=0

define sketchpad trial_stimuli_3
	set duration 200
	set description "Displays stimuli"
	draw rect color=white fill=0 h=192 name=left_button penwidth=1 show_if=always w=192 x=-512.0 y=-320.0 z_index=0
	draw rect color=white fill=0 h=192 name=right_button penwidth=1 show_if=always w=192 x=320.0 y=-320.0 z_index=0
	draw image center=1 file="[left_figure]" scale=1 show_if=always x=-416.0 y=-224.0 z_index=0
	draw image center=1 file="[right_figure]" scale=1 show_if=always x=416.0 y=-224.0 z_index=0

